PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Completed URL = https://run.pavlovia.org/nitzanlubi/arithmetic_task_exp
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['participant'], expInfo['delay'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '1', 'delay': 'short', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/stim_lists/stimuli_list_sub_150_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_2_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_2_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_1_run_3.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_1_run_2.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_1_run_1.csv', 'stimuli/items/undersea_object_30.png', 'stimuli/items/undersea_object_29.png', 'stimuli/items/undersea_object_28.png', 'stimuli/items/undersea_object_27.png', 'stimuli/items/undersea_object_26.png', 'stimuli/items/undersea_object_25.png', 'stimuli/items/undersea_object_24.png', 'stimuli/items/undersea_object_23.png', 'stimuli/items/undersea_object_22.png', 'stimuli/items/undersea_object_21.png', 'stimuli/items/undersea_object_20.png', 'stimuli/items/undersea_object_19.png', 'stimuli/items/undersea_object_18.png', 'stimuli/items/undersea_object_17.png', 'stimuli/items/undersea_object_16.png', 'stimuli/items/undersea_object_15.png', 'stimuli/items/undersea_object_14.png', 'stimuli/items/undersea_object_13.png', 'stimuli/items/undersea_object_12.png', 'stimuli/items/undersea_object_11.png', 'stimuli/items/undersea_object_10.png', 'stimuli/items/undersea_object_9.png', 'stimuli/items/undersea_object_8.png', 'stimuli/items/undersea_object_7.png', 'stimuli/items/undersea_object_6.png', 'stimuli/items/undersea_object_5.png', 'stimuli/items/undersea_object_4.png', 'stimuli/items/undersea_object_3.png', 'stimuli/items/undersea_object_2.png', 'stimuli/items/undersea_object_1.png', 'stimuli/items/undersea_animal_30.png', 'stimuli/items/undersea_animal_29.png', 'stimuli/items/undersea_animal_28.png', 'stimuli/items/undersea_animal_27.png', 'stimuli/items/undersea_animal_26.png', 'stimuli/items/undersea_animal_25.png', 'stimuli/items/undersea_animal_24.png', 'stimuli/items/undersea_animal_23.png', 'stimuli/items/undersea_animal_22.png', 'stimuli/items/undersea_animal_21.png', 'stimuli/items/undersea_animal_20.png', 'stimuli/items/undersea_animal_19.png', 'stimuli/items/undersea_animal_18.png', 'stimuli/items/undersea_animal_17.png', 'stimuli/items/undersea_animal_16.png', 'stimuli/items/undersea_animal_15.png', 'stimuli/items/undersea_animal_14.png', 'stimuli/items/undersea_animal_13.png', 'stimuli/items/undersea_animal_12.png', 'stimuli/items/undersea_animal_11.png', 'stimuli/items/undersea_animal_10.png', 'stimuli/items/undersea_animal_9.png', 'stimuli/items/undersea_animal_8.png', 'stimuli/items/undersea_animal_7.png', 'stimuli/items/undersea_animal_6.png', 'stimuli/items/undersea_animal_5.png', 'stimuli/items/undersea_animal_4.png', 'stimuli/items/undersea_animal_3.png', 'stimuli/items/undersea_animal_2.png', 'stimuli/items/undersea_animal_1.png', 'stimuli/items/other_object_20.png', 'stimuli/items/other_object_19.png', 'stimuli/items/other_object_18.png', 'stimuli/items/other_object_17.png', 'stimuli/items/other_object_16.png', 'stimuli/items/other_object_15.png', 'stimuli/items/other_object_14.png', 'stimuli/items/other_object_13.png', 'stimuli/items/other_object_12.png', 'stimuli/items/other_object_11.png', 'stimuli/items/other_object_10.png', 'stimuli/items/other_object_9.png', 'stimuli/items/other_object_8.png', 'stimuli/items/other_object_7.png', 'stimuli/items/other_object_6.png', 'stimuli/items/other_object_5.png', 'stimuli/items/other_object_4.png', 'stimuli/items/other_object_3.png', 'stimuli/items/other_object_2.png', 'stimuli/items/other_object_1.png', 'stimuli/items/other_animal_20.png', 'stimuli/items/other_animal_19.png', 'stimuli/items/other_animal_18.png', 'stimuli/items/other_animal_17.png', 'stimuli/items/other_animal_16.png', 'stimuli/items/other_animal_15.png', 'stimuli/items/other_animal_14.png', 'stimuli/items/other_animal_13.png', 'stimuli/items/other_animal_12.png', 'stimuli/items/other_animal_11.png', 'stimuli/items/other_animal_10.png', 'stimuli/items/other_animal_9.png', 'stimuli/items/other_animal_8.png', 'stimuli/items/other_animal_7.png', 'stimuli/items/other_animal_6.png', 'stimuli/items/other_animal_5.png', 'stimuli/items/other_animal_4.png', 'stimuli/items/other_animal_3.png', 'stimuli/items/other_animal_2.png', 'stimuli/items/other_animal_1.png', 'stimuli/items/jungle_object_30.png', 'stimuli/items/jungle_object_29.png', 'stimuli/items/jungle_object_28.png', 'stimuli/items/jungle_object_27.png', 'stimuli/items/jungle_object_26.png', 'stimuli/items/jungle_object_25.png', 'stimuli/items/jungle_object_24.png', 'stimuli/items/jungle_object_23.png', 'stimuli/items/jungle_object_22.png', 'stimuli/items/jungle_object_21.png', 'stimuli/items/jungle_object_20.png', 'stimuli/items/jungle_object_19.png', 'stimuli/items/jungle_object_18.png', 'stimuli/items/jungle_object_17.png', 'stimuli/items/jungle_object_16.png', 'stimuli/items/jungle_object_15.png', 'stimuli/items/jungle_object_14.png', 'stimuli/items/jungle_object_13.png', 'stimuli/items/jungle_object_12.png', 'stimuli/items/jungle_object_11.png', 'stimuli/items/jungle_object_10.png', 'stimuli/items/jungle_object_9.png', 'stimuli/items/jungle_object_8.png', 'stimuli/items/jungle_object_7.png', 'stimuli/items/jungle_object_6.png', 'stimuli/items/jungle_object_5.png', 'stimuli/items/jungle_object_4.png', 'stimuli/items/jungle_object_3.png', 'stimuli/items/jungle_object_2.png', 'stimuli/items/jungle_object_1.png', 'stimuli/items/jungle_animal_30.png', 'stimuli/items/jungle_animal_29.png', 'stimuli/items/jungle_animal_28.png', 'stimuli/items/jungle_animal_27.png', 'stimuli/items/jungle_animal_26.png', 'stimuli/items/jungle_animal_25.png', 'stimuli/items/jungle_animal_24.png', 'stimuli/items/jungle_animal_23.png', 'stimuli/items/jungle_animal_22.png', 'stimuli/items/jungle_animal_21.png', 'stimuli/items/jungle_animal_20.png', 'stimuli/items/jungle_animal_19.png', 'stimuli/items/jungle_animal_18.png', 'stimuli/items/jungle_animal_17.png', 'stimuli/items/jungle_animal_16.png', 'stimuli/items/jungle_animal_15.png', 'stimuli/items/jungle_animal_14.png', 'stimuli/items/jungle_animal_13.png', 'stimuli/items/jungle_animal_12.png', 'stimuli/items/jungle_animal_11.png', 'stimuli/items/jungle_animal_10.png', 'stimuli/items/jungle_animal_9.png', 'stimuli/items/jungle_animal_8.png', 'stimuli/items/jungle_animal_7.png', 'stimuli/items/jungle_animal_6.png', 'stimuli/items/jungle_animal_5.png', 'stimuli/items/jungle_animal_4.png', 'stimuli/items/jungle_animal_3.png', 'stimuli/items/jungle_animal_2.png', 'stimuli/items/jungle_animal_1.png', 'stimuli/scenes/scene_U2.png', 'stimuli/scenes/scene_U1.png', 'stimuli/scenes/scene_J2.png', 'stimuli/scenes/scene_J1.png']
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = SBL_superimposed_encoding
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine end_screen
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    CodeComponent code_end_inst
      Code Type = Both
      Begin JS Experiment:
        window.end_inst = undefined;
      Begin JS Routine:
        if (expInfo['group']==='A' && expInfo['delay']==='short'){
            window.end_inst = 'Great job!\n\nTo continue to the next task, Press SPACEBAR, and then select "OK" in the prompted window - this will lead you to the next part of the experiment.';
            }else{
                window.end_inst = 'Great job! You are done with the first session of our experiment!\n\nIn three days, we will send you the link trhough Prolific massages to the second session of the experiment, and you will have 24 hours to complete it. If you would like to receive an email notification as well, please send us a massage with your email address.\n\nPress SPACEBAR and "OK" in the prompted window to receive the completion code for the current session.';
                }
      Begin Routine:
        end_inst = (
                "Great job! You are done with the first session of our experiment!\n\n"
                "Press SPACEBAR to exit and notify researcher to next steps. "
            )
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $end_inst
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 14
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    CodeComponent code_url
      Code Type = Both
      Begin JS Experiment:
        let completion_url;
      End JS Routine:
        if (expInfo['group']==='A' && expInfo['delay']==='short'){
            completion_url = 'https://run.pavlovia.org/nitzanlubi/arithmetic_task_exp/?group='
                + expInfo['group']
                + '&participant=' + expInfo['participant']
                + '&session=' + expInfo['session']
                + '&delay=' + expInfo['delay'];
            console.log('completion url:',completion_url);
        //    window.location.href = completion_url;
            psychoJS.setRedirectUrls(completion_url, '');
            }else{
                completion_url = 'https://app.prolific.com/submissions/complete?cc=CUFOIWKV';
                console.log('completion url:',completion_url);
        //        window.location.href = completion_url;
                psychoJS.setRedirectUrls(completion_url, '');
                }
  Routine congruency_response
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    CodeComponent code_cor_resp
      Code Type = Auto->JS
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      Begin Routine:
        if congruency == 'sc':
            cor_key = key_related
        elif congruency == 'si':
            cor_key = key_unrelated

        txt_qst = 'Related (' + key_related.upper() + ')\nor Unrelated (' + key_unrelated.upper() + ')'
    TextComponent text_congruency
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $txt_qst
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    KeyboardComponent key_resp_congruency
      allowedKeys = 'q','p'
      correctAns = $cor_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine instructions_screen
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    CodeComponent code_text_relatedness
      Code Type = Both
      disabled = True
      Begin JS Routine:
        if ((key_related === "q")) {
            text_relatedness = "If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to start.";
        } else {
            if ((key_related === "p")) {
                text_relatedness = "If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to start.";
            }
        }
      Begin Routine:
        if key_related == 'q':
            text_relatedness = 'If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
        elif key_related == 'p':
            text_relatedness = 'If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
    TextComponent text_instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this item-scene association task, you will see different items (objects or animals) placed in one of the jungle or undersea scenes you memorized previously. After each presentation of an item and a scene, you will be asked to report whether they are related or unrelated.

        What does “related” mean?

        An animal is related to a scene if it is plausible it would live in such an environment in real life. If not, it is unrelated.

        An object is related to a scene if it is plausible it would be used in such an environment in real life. If not, it is unrelated.

        You will see each item-scene pair three times in total.

        Press SPACEBAR to continue.
    TextComponent text_relatedness_keys
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_relatedness
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    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine scene_item_presentation
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    ImageComponent image_scene
      image [set every repeat] = $scene_stimulus
      size = (1.78, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent image_item
      image [set every repeat] = $item_stimulus
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = pix
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    CodeComponent code
      Code Type = Py
      disabled = True
      Begin Routine:
        if trials.thisN >= 10:
            trials.finished = True
  Routine blank2000
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine get_relatedness_keys
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    CodeComponent code_get_keys
      Code Type = Both
      Before JS Experiment:
        var key_related
        var key_unrelated
        var instruction_text
      Begin Experiment:
        # allocate participant to relatedness response key accprding
        # to counterbalanced_vars.xlsx
        import pandas as pd
        df = pd.read_csv('counterbalanced_vars_behav.csv') # match to relevant experiment var table
        subnum = int(expInfo['participant'])
        ind = df[df['Participant'] == subnum].index[0]
        sub_conds = df.loc[ind,df.columns].values.tolist()
        print(sub_conds)
        # assign context keys
        if sub_conds[1] == 0:
            key_related = 'q'
            key_unrelated = 'p'
            #instruction_text = 'If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
            # new instructions to match integrated task:
            instruction_text = (
                'If they are related, press Q\n'
                'If they are unrelated, press P\n\n'
                'IMPORTANT:\n'
                'ONLY respond when the screen says:\n'
                '"Related (Q) or Unrelated (P)"\n\n'
                'Do NOT respond while:\n'
                '- the scene and item are displayed\n'
                '- the fixation cross (+) is displayed\n'
                'Wait until the response screen appears, then press P or Q.\n\n'
                'Press SPACEBAR to continue.'
            )
        elif sub_conds[1] == 1:
            key_related = 'p'
            key_unrelated = 'q'
            #instruction_text = 'If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.'
            # new instructions to match integrated task:
            instruction_text = (
                'If they are related, press P\n'
                'If they are unrelated, press Q\n\n'
                'IMPORTANT:\n'
                'ONLY respond when the screen says:\n'
                '"Related (P) or Unrelated (Q)"\n\n'
                'Do NOT respond while:\n'
                '- the scene and item are displayed\n'
                '- the fixation cross (+) is displayed\n'
                'Wait until the response screen appears, then press P or Q.\n\n'
                'Press SPACEBAR to continue.'
            )
      Begin JS Experiment:
        // Function to read and process the CSV file
         function loadCSVFile(filePath, callback) {
           var request = new XMLHttpRequest();
           request.open('GET', filePath, true);
           request.onreadystatechange = function () {
             if (request.readyState === 4 && request.status === 200) {
               callback(request.responseText);
             }
           };
           request.send();
         }

         // Callback function to process CSV data
         function processCSVData(csvData) {
           var lines = csvData.split('\n');
           var headers = lines[0].split(',');
           var data = lines.slice(1).map(function(line) {
             var values = line.split(',');
             var entry = {};
             headers.forEach(function(header, index) {
               entry[header] = values[index];
             });
             return entry;
           });

           var subnum = parseInt(expInfo['participant']);
           var sub_conds = data.find(function(row) {
             return parseInt(row['Participant']) === subnum;
           });

           // Converting row values to an array
           var sub_conds_values = Object.values(sub_conds);

           // Logging the values (similar to print in Python)
           console.log(sub_conds_values);

           // Assign context keys based on the value of sub_conds[1]
           if (sub_conds_values[1] === '0') {
             key_related = 'q';
             key_unrelated = 'p';
             instruction_text = 'If they are related, press Q\nIf they are unrelated, press P\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.';
           } else if (sub_conds_values[1] === '1') {
             key_related = 'p';
             key_unrelated = 'q';
             instruction_text = 'If they are related, press P\nIf they are unrelated, press Q\n\nIMPORTANT: you should press P or Q only when you see the question, AFTER the scene and item disappeared from the screen!\n\nPress SPACEBAR to continue.';
           }

           // Use key_related, key_unrelated, and instruction_text as needed in your experiment
           console.log({ key_related, key_unrelated, instruction_text });
         }

         // Load and process the CSV file
         loadCSVFile('counterbalanced_vars.csv', processCSVData);
    CodeComponent code_printexpInfo
      Code Type = Both
      Begin JS Experiment:
        console.log('participant:',expInfo['participant']);
        console.log('session:',expInfo['session']);
        console.log('group:',expInfo['group']);
        console.log('delay:',expInfo['delay']);
    CodeComponent init_counterbalance
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random


        cond_file = f"stimuli/cond_lists/scene_names_sub_{expInfo['participant']}.csv"
        df = pd.read_csv(cond_file)

        scene_J1_lbl = df.loc[df['scene_stimulus']=='J1','scene_label'].values[0]
        scene_J2_lbl = df.loc[df['scene_stimulus']=='J2','scene_label'].values[0]
        scene_U1_lbl = df.loc[df['scene_stimulus']=='U1','scene_label'].values[0]
        scene_U2_lbl = df.loc[df['scene_stimulus']=='U2','scene_label'].values[0]
  Routine is_last_run
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    CodeComponent code_last_run
      Code Type = Auto->JS
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      Begin Routine:
        # get bewtween-run instruction or not?
        if run != 3:
            not_last = 1 # get in
        elif run ==3:
            not_last = 0 # don't
  Routine between_run_pause
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    CodeComponent code_pause_intructions
      Code Type = Auto->JS
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      Begin Routine:
        if key_related == 'q':
            text_inst_pause = 'Reminder:\n\nIf the scene and item are related, press Q\nIf they are unrelated, press P.\n\nPress ONLY AFTER the item and scene disappeared!\n\nPress SPACEBAR to resume.'
        if key_related == 'p':
            text_inst_pause = 'Reminder:\n\nIf the scene and item are related, press P\nIf they are unrelated, press Q.\n\nPress ONLY AFTER the item and scene disappeared!\n\nPress SPACEBAR to resume.'
    TextComponent text_run_pause
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Good job! You can rest for a moment and then continue to the next run. 
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    TextComponent text_relatedness_pause
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_inst_pause
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    KeyboardComponent key_resp_next_run
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_run_stim_list
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    CodeComponent code_get_stim_list
      Code Type = Both
      Begin JS Routine:
        subnum = expInfo["participant"];
        session = expInfo["session"];

        // group A's logic: enc set 1 --> filler --> ret set1 -->  enc set 2
        if (expInfo["group"] ==='A'){
            if (expInfo["delay"] === 'short'){
                stim_list = ((((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_1") + "_run_") + run.toString()) + ".csv");
                }else{
                    if (expInfo["delay"] === 'long'){
                        stim_list = ((((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_2") + "_run_") + run.toString()) + ".csv");
                        }
                }
            }

        console.log('stim list:',stim_list);
      Begin Routine:
        subnum = expInfo['participant']
        session = expInfo['session']
        stim_list = "stimuli/stim_lists/stimuli_list_sub_" + subnum + "_run_" + str(run) + ".csv"
  Routine instruction_keys
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    TextComponent text_keys
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent key_resp_keysInst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank1000
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine questions_pilot
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    TextboxComponent textbox_feedbak
      bold = False
      disabled = True
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Great job! You're almost done with the experiment.

        We would greatly appreciate your feedback. Please write below if you experienced any issues with performing the task, if you understood all the instructions or if there was anything unclear, or anything else you would like to share.

        Once you're done, press the "0" key.

        Thanks!
    KeyboardComponent key_resp
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_feedback
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    CodeComponent code_get_feedback
      Code Type = Both
      Begin JS Experiment:
        var is_end_ses
      Begin JS Routine:
        if (expInfo['group']==='A' && expInfo['delay']==='long'){
            is_end_ses = 1;
            }else{
                is_end_ses = 0;
                }
  Routine eye_link_setup
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    TextComponent elInstructions
      letterHeight = 50
      startVal [time (s)] = 0
      text = Press any key to start Camera Setup
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine eyelink_start_rec
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    CodeComponent elStartRecord
      Code Type = Py
      disabled = True
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      Begin Experiment:
        # Create an array of pixels to assist in transferring content to the Host PC backdrop
        rgbBGColor = (128,128,128)
        blankHostPixels = [[rgbBGColor for i in range(scn_width)]
            for j in range(scn_height)]
      Begin Routine:
        # This Begin Routine tab of the elStartRecord component draws some feedback
        # graphics (image and a simple shape) on the Host PC, sends a trial start
        # message to the EDF, performs drift check/drift correct, and starts eye tracker
        # recording

        # get a reference to the currently active EyeLink connection
        el_tracker = pylink.getEYELINK()

        # put the tracker in the offline mode first
        el_tracker.setOfflineMode()

        # clear the host screen before we draw the backdrop
        el_tracker.sendCommand('clear_screen 0')
        # imagesAndComponentsStringList value = ['trialImage,image']
        # imagesAndComponentsList value = [['trialImage', 'image']]
        # imagesAndComponentsListString value = [[trialImage, image]]
        # Send image components to the Host PC backdrop to serve as landmarks during recording
        # The method bitmapBackdrop() requires a step of converting the
        # image pixels into a recognizable format by the Host PC.
        # pixels = [line1, ...lineH], line = [pix1,...pixW], pix=(R,G,B)
        # the bitmapBackdrop() command takes time to return, not recommended
        # for tasks where the ITI matters, e.g., in an event-related fMRI task
        # parameters: width, height, pixel, crop_x, crop_y,
        #             crop_width, crop_height, x, y on the Host, drawing options
        # get the array of blank pixels where each pixel corresponds to win.color
        pixels = blankHostPixels[::]

        # Make a list of image components to be transferred
        # Each item in the list should itself be a list, where the first item is
        # the name of the image file to be transferred and the second
        # is the name of the component handling the presentation of the image
        imagesAndComponentsListForHostBackdrop = [[trialImage, image]]
        # go through each image and replace the pixels in the blank array with the image pixels
        for thisImageFileComponentPair in imagesAndComponentsListForHostBackdrop:
            thisImageFile = thisImageFileComponentPair[0]
            thisImageComponent = thisImageFileComponentPair[1]
            thisImageComponent.setImage(thisImageFile)
            if "Image" in str(thisImageComponent.__class__):
                # Use the code commented below to convert the image and send the backdrop
                im = Image.open(script_path + "/" + thisImageFile)
                thisImageComponent.elPos = eyelink_pos(thisImageComponent.pos,[scn_width,scn_height])
                thisImageComponent.elSize = eyelink_size(thisImageComponent.size,[scn_width,scn_height])
                imWidth = int(round(thisImageComponent.elSize[0]))
                imHeight = int(round(thisImageComponent.elSize[1]))
                imLeft = int(round(thisImageComponent.elPos[0]-thisImageComponent.elSize[0]/2))
                imTop = int(round(thisImageComponent.elPos[1]-thisImageComponent.elSize[1]/2))
                im = im.resize((imWidth,imHeight))
                # Access the pixel data of the image
                img_pixels = list(im.getdata())
                # Check to see if the image goes off the screen
                # If so, adjust the coordinates appropriately
                if imLeft < 0:
                    imTransferLeft = 0
                else:
                    imTransferLeft = imLeft
                if imTop < 0:
                    imTransferTop = 0
                else:
                    imTransferTop = imTop
                if imLeft + imWidth > scn_width:
                    imTransferRight = scn_width
                else:
                    imTransferRight = imLeft+imWidth
                if imTop + imHeight > scn_height:
                    imTransferBottom = scn_height
                else:
                    imTransferBottom = imTop+imHeight
                imTransferImageLineStartX = imTransferLeft-imLeft
                imTransferImageLineEndX = imTransferRight-imTransferLeft+imTransferImageLineStartX
                imTransferImageLineStartY = imTransferTop-imTop
                for y in range(imTransferBottom-imTransferTop):
                    pixels[imTransferTop+y][imTransferLeft:imTransferRight] = \
                        img_pixels[(imTransferImageLineStartY + y)*imWidth+imTransferImageLineStartX:\
                        (imTransferImageLineStartY + y)*imWidth + imTransferImageLineEndX]
            else:
                print("WARNING: Image Transfer Not Supported For non-Image Component %s)" % str(thisComponent.__class__))
        # transfer the full-screen pixel array to the Host PC
        el_tracker.bitmapBackdrop(scn_width,scn_height, pixels,\
            0, 0, scn_width, scn_height, 0, 0, pylink.BX_MAXCONTRAST)

        # OPTIONAL: draw landmarks and texts on the Host screen
        # In addition to backdrop image, You may draw simples on the Host PC to use
        # as landmarks. For illustration purposes, here we draw a box
        # For a list of supported draw commands, see the "COMMANDS.INI" file on the
        # Host PC (under /elcl/exe)
        left = int(scn_width/2.0) - 60
        top = int(scn_height/2.0) - 60
        right = int(scn_width/2.0) + 60
        bottom = int(scn_height/2.0) + 60
        draw_cmd = 'draw_filled_box %d %d %d %d 1' % (left, top, right, bottom)
        el_tracker.sendCommand(draw_cmd)

        # send a "TRIALID" message to mark the start of a trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIALID %d' % trial_index)

        # record_status_message : show some info on the Host PC
        # here we show how many trial has been tested
        status_msg = 'TRIAL number %d' % trial_index
        el_tracker.sendCommand("record_status_message '%s'" % status_msg)

        # drift check
        # we recommend drift-check at the beginning of each trial
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments:
        # draw_target (1-default, 0-draw the target then call doDriftCorrect)
        # allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
        # Skip drift-check if running the script in Dummy Mode
        while not dummy_mode:
            # terminate the task if no longer connected to the tracker or
            # user pressed Ctrl-C to terminate the task
            if (not el_tracker.isConnected()) or el_tracker.breakPressed():
                terminate_task(genv,edf_file,session_folder,session_identifier)
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
                if error is not pylink.ESC_KEY:
                    break
            except:
                pass

        # put tracker in idle/offline mode before recording
        el_tracker.setOfflineMode()

        # Start recording
        # arguments: sample_to_file, events_to_file, sample_over_link,
        # event_over_link (1-yes, 0-no)
        try:
            el_tracker.startRecording(1, 1, 1, 1)
        except RuntimeError as error:
            print("ERROR:", error)
            abort_trial()

        # Allocate some time for the tracker to cache some samples before allowing
        # trial stimulus presentation to proceed
        pylink.pumpDelay(100)
  Routine eyelink_stop_rec
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    CodeComponent elStopRecord
      Code Type = Py
      disabled = True
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      End Routine:
        # This End Routine tab of the elStopRecord component clears the
        # screen (and sends a message to mark the clearing), stops recording, sends
        # a trial end message, and increments a trial counter variable

        # clear the screen
        clear_screen(win,genv)
        el_tracker.sendMessage('blank_screen')
        # send a message to clear the Data Viewer screen as well
        el_tracker.sendMessage('!V CLEAR 128 128 128')

        # stop recording; add 100 msec to catch final events before stopping
        pylink.pumpDelay(100)
        el_tracker.stopRecording()

        # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
        el_tracker.sendMessage('TRIAL_RESULT %d' % 0)

        # update the trial counter for the next trial
        trial_index = trial_index + 1
  Routine scene_names_reminder
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    TextComponent text_reminder
      letterHeight = 0.035
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Reminder: these are the names of the four scenes
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    ImageComponent image1
      image [set every repeat] = stimuli/scenes/scene_J1.png
      pos = (-.35, .15)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = stimuli/scenes/scene_J2.png
      pos = (.35, .15)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = stimuli/scenes/scene_U1.png
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = stimuli/scenes/scene_U2.png
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J1_lbl
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    TextboxComponent textbox2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J2_lbl
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    TextboxComponent textbox3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U1_lbl
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    TextboxComponent textbox4
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U2_lbl
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    KeyboardComponent key_reminder
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  Routine get_relatedness_keys
  Routine instructions_screen
  Routine instruction_keys
  Routine scene_names_reminder
  Routine blank2000
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs_params.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'run': 1},
      {'run': 2},
      {'run': 3}]
    Routine get_run_stim_list
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_list
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('scene_stimulus', 'stimul/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/jungle_object_11.png'), ('item_cat', 'Jungle'), ('item_type', 'object'), ('congruency', 'si')]),
        OrderedDict([('scene_stimulus', 'stimul/scenes/scene_J2.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Somar'), ('item_stimulus', 'stimuli/items/jungle_animal_14.png'), ('item_cat', 'Jungle'), ('item_type', 'animal'), ('congruency', 'sc')]),
        OrderedDict([('scene_stimulus', 'stimul/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/sea_animal_2.png'), ('item_cat', 'Undersea'), ('item_type', 'animal'), ('congruency', 'sc')]),
        OrderedDict([('scene_stimulus', 'stimul/scenes/scene_J1.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/sea_object_3.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'si')]),
        OrderedDict([('scene_stimulus', 'stimul/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/sea_animal_11.png'), ('item_cat', 'Undersea'), ('item_type', 'animal'), ('congruency', 'sc')]),
        OrderedDict([('scene_stimulus', 'stimul/scenes/scene_J1.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/jungle_object_6.png'), ('item_cat', 'Jungle'), ('item_type', 'object'), ('congruency', 'sc')])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
      Routine scene_item_presentation
      Routine congruency_response
      Routine blank1000
    LoopTerminator trials
    Routine is_last_run
    LoopInitiator between_run_inst loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = not_last
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      Routine between_run_pause
    LoopTerminator between_run_inst
  LoopTerminator runs
  Routine end_screen
