PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['delay'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '1', 'delay': 'short', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/cond_lists/scene_names_sub_150.csv', 'stimuli/cond_lists/scene_names_sub_149.csv', 'stimuli/cond_lists/scene_names_sub_148.csv', 'stimuli/cond_lists/scene_names_sub_147.csv', 'stimuli/cond_lists/scene_names_sub_146.csv', 'stimuli/cond_lists/scene_names_sub_145.csv', 'stimuli/cond_lists/scene_names_sub_144.csv', 'stimuli/cond_lists/scene_names_sub_143.csv', 'stimuli/cond_lists/scene_names_sub_142.csv', 'stimuli/cond_lists/scene_names_sub_141.csv', 'stimuli/cond_lists/scene_names_sub_140.csv', 'stimuli/cond_lists/scene_names_sub_139.csv', 'stimuli/cond_lists/scene_names_sub_138.csv', 'stimuli/cond_lists/scene_names_sub_137.csv', 'stimuli/cond_lists/scene_names_sub_136.csv', 'stimuli/cond_lists/scene_names_sub_135.csv', 'stimuli/cond_lists/scene_names_sub_134.csv', 'stimuli/cond_lists/scene_names_sub_133.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_150_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_149_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_148_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_147_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_146_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_145_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_144_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_143_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_142_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_141_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_140_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_139_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_138_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_137_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_136_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_135_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_134_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_133_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_132_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_131_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_101_set_1_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_2_run_1.csv', 'stimuli/stim_lists/stimuli_list_sub_100_set_1_run_1.csv', 'stimuli/cond_lists/scene_names_sub_102.csv', 'stimuli/cond_lists/scene_names_sub_132.csv', 'stimuli/cond_lists/scene_names_sub_131.csv', 'stimuli/cond_lists/scene_names_sub_101.csv', 'counterbalanced_vars.csv', 'stimuli/scenes/scene_J1.png', 'stimuli/scenes/scene_U2.png', 'stimuli/scenes/scene_U1.png', 'stimuli/scenes/scene_J2.png', 'stimuli/items/undersea_object_30.png', 'stimuli/items/undersea_object_29.png', 'stimuli/items/undersea_object_28.png', 'stimuli/items/undersea_object_27.png', 'stimuli/items/undersea_object_26.png', 'stimuli/items/undersea_object_25.png', 'stimuli/items/undersea_object_24.png', 'stimuli/items/undersea_object_23.png', 'stimuli/items/undersea_object_22.png', 'stimuli/items/undersea_object_21.png', 'stimuli/items/undersea_object_20.png', 'stimuli/items/undersea_object_19.png', 'stimuli/items/undersea_object_18.png', 'stimuli/items/undersea_object_17.png', 'stimuli/items/undersea_object_16.png', 'stimuli/items/undersea_object_15.png', 'stimuli/items/undersea_object_14.png', 'stimuli/items/undersea_object_13.png', 'stimuli/items/undersea_object_12.png', 'stimuli/items/undersea_object_11.png', 'stimuli/items/undersea_object_10.png', 'stimuli/items/undersea_object_9.png', 'stimuli/items/undersea_object_8.png', 'stimuli/items/undersea_object_7.png', 'stimuli/items/undersea_object_6.png', 'stimuli/items/undersea_object_5.png', 'stimuli/items/undersea_object_4.png', 'stimuli/items/undersea_object_3.png', 'stimuli/items/undersea_object_2.png', 'stimuli/items/undersea_object_1.png', 'stimuli/items/undersea_animal_30.png', 'stimuli/items/undersea_animal_29.png', 'stimuli/items/undersea_animal_28.png', 'stimuli/items/undersea_animal_27.png', 'stimuli/items/undersea_animal_26.png', 'stimuli/items/undersea_animal_25.png', 'stimuli/items/undersea_animal_24.png', 'stimuli/items/undersea_animal_23.png', 'stimuli/items/undersea_animal_22.png', 'stimuli/items/undersea_animal_21.png', 'stimuli/items/undersea_animal_20.png', 'stimuli/items/undersea_animal_19.png', 'stimuli/items/undersea_animal_18.png', 'stimuli/items/undersea_animal_17.png', 'stimuli/items/undersea_animal_16.png', 'stimuli/items/undersea_animal_15.png', 'stimuli/items/undersea_animal_14.png', 'stimuli/items/undersea_animal_13.png', 'stimuli/items/undersea_animal_12.png', 'stimuli/items/undersea_animal_11.png', 'stimuli/items/undersea_animal_10.png', 'stimuli/items/undersea_animal_9.png', 'stimuli/items/undersea_animal_8.png', 'stimuli/items/undersea_animal_7.png', 'stimuli/items/undersea_animal_6.png', 'stimuli/items/undersea_animal_5.png', 'stimuli/items/undersea_animal_4.png', 'stimuli/items/undersea_animal_3.png', 'stimuli/items/undersea_animal_2.png', 'stimuli/items/undersea_animal_1.png', 'stimuli/items/other_object_20.png', 'stimuli/items/other_object_19.png', 'stimuli/items/other_object_18.png', 'stimuli/items/other_object_17.png', 'stimuli/items/other_object_16.png', 'stimuli/items/other_object_15.png', 'stimuli/items/other_object_14.png', 'stimuli/items/other_object_13.png', 'stimuli/items/other_object_12.png', 'stimuli/items/other_object_11.png', 'stimuli/items/other_object_10.png', 'stimuli/items/other_object_9.png', 'stimuli/items/other_object_8.png', 'stimuli/items/other_object_7.png', 'stimuli/items/other_object_6.png', 'stimuli/items/other_object_5.png', 'stimuli/items/other_object_4.png', 'stimuli/items/other_object_3.png', 'stimuli/items/other_object_2.png', 'stimuli/items/other_object_1.png', 'stimuli/items/other_animal_20.png', 'stimuli/items/other_animal_19.png', 'stimuli/items/other_animal_18.png', 'stimuli/items/other_animal_17.png', 'stimuli/items/other_animal_16.png', 'stimuli/items/other_animal_15.png', 'stimuli/items/other_animal_14.png', 'stimuli/items/other_animal_13.png', 'stimuli/items/other_animal_12.png', 'stimuli/items/other_animal_11.png', 'stimuli/items/other_animal_10.png', 'stimuli/items/other_animal_9.png', 'stimuli/items/other_animal_8.png', 'stimuli/items/other_animal_7.png', 'stimuli/items/other_animal_6.png', 'stimuli/items/other_animal_5.png', 'stimuli/items/other_animal_4.png', 'stimuli/items/other_animal_3.png', 'stimuli/items/other_animal_2.png', 'stimuli/items/other_animal_1.png', 'stimuli/items/jungle_object_30.png', 'stimuli/items/jungle_object_29.png', 'stimuli/items/jungle_object_28.png', 'stimuli/items/jungle_object_27.png', 'stimuli/items/jungle_object_26.png', 'stimuli/items/jungle_object_25.png', 'stimuli/items/jungle_object_24.png', 'stimuli/items/jungle_object_23.png', 'stimuli/items/jungle_object_22.png', 'stimuli/items/jungle_object_21.png', 'stimuli/items/jungle_object_20.png', 'stimuli/items/jungle_object_19.png', 'stimuli/items/jungle_object_18.png', 'stimuli/items/jungle_object_17.png', 'stimuli/items/jungle_object_16.png', 'stimuli/items/jungle_object_15.png', 'stimuli/items/jungle_object_14.png', 'stimuli/items/jungle_object_13.png', 'stimuli/items/jungle_object_12.png', 'stimuli/items/jungle_object_11.png', 'stimuli/items/jungle_object_10.png', 'stimuli/items/jungle_object_9.png', 'stimuli/items/jungle_object_8.png', 'stimuli/items/jungle_object_7.png', 'stimuli/items/jungle_object_6.png', 'stimuli/items/jungle_object_5.png', 'stimuli/items/jungle_object_4.png', 'stimuli/items/jungle_object_3.png', 'stimuli/items/jungle_object_2.png', 'stimuli/items/jungle_object_1.png', 'stimuli/items/jungle_animal_30.png', 'stimuli/items/jungle_animal_29.png', 'stimuli/items/jungle_animal_28.png', 'stimuli/items/jungle_animal_27.png', 'stimuli/items/jungle_animal_26.png', 'stimuli/items/jungle_animal_25.png', 'stimuli/items/jungle_animal_24.png', 'stimuli/items/jungle_animal_23.png', 'stimuli/items/jungle_animal_22.png', 'stimuli/items/jungle_animal_21.png', 'stimuli/items/jungle_animal_20.png', 'stimuli/items/jungle_animal_19.png', 'stimuli/items/jungle_animal_18.png', 'stimuli/items/jungle_animal_17.png', 'stimuli/items/jungle_animal_16.png', 'stimuli/items/jungle_animal_15.png', 'stimuli/items/jungle_animal_14.png', 'stimuli/items/jungle_animal_13.png', 'stimuli/items/jungle_animal_12.png', 'stimuli/items/jungle_animal_11.png', 'stimuli/items/jungle_animal_10.png', 'stimuli/items/jungle_animal_9.png', 'stimuli/items/jungle_animal_8.png', 'stimuli/items/jungle_animal_7.png', 'stimuli/items/jungle_animal_6.png', 'stimuli/items/jungle_animal_5.png', 'stimuli/items/jungle_animal_4.png', 'stimuli/items/jungle_animal_3.png', 'stimuli/items/jungle_animal_2.png', 'stimuli/items/jungle_animal_1.png']
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = SBL_superimposed_retrieval
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine item_imagine_scene
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    TextComponent text_imagine
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Imagine the associated scene
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    TextComponent text_keypress
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Press 'SPACEBAR' when you imagine the scene.
    ImageComponent item_cue
      image [set every repeat] = $item_stimulus
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_remember
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine select_scene_name
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    CodeComponent code_set_scene_vars
      Code Type = Auto->JS
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      Begin Routine:
        # set current trial's scene labels, color and correct response key
        # according to encoding context

        if scene_cat == 'Jungle':
            cur_labels = jungle_lbl_text
            cur_color = color_jungle
        elif scene_cat == 'Undersea':
            cur_labels = sea_lbl_text
            cur_color = color_sea

        if 'J1' in scene_stimulus:
            cor_scene_key = key_J1
        elif 'J2' in scene_stimulus:
            cor_scene_key = key_J2
        elif 'U1' in scene_stimulus:
            cor_scene_key = key_U1
        elif 'U2' in scene_stimulus:
            cor_scene_key = key_U2
    TextComponent text_scene_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = The context was
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    TextComponent text_actual_context
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $scene_cat
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    TextComponent text_q_scene
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which specific scene?
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    TextComponent text_labels
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $cur_labels
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    KeyboardComponent key_resp_scenes
      allowedKeys = '1','2'
      correctAns = $cor_scene_key
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine ret_end_screen
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    TextComponent text_endSet
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

        You're done with this set of items.

        Press SPACEBAR to continue
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine select_context
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    CodeComponent code_cor_context_key
      Code Type = Auto->JS
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      Begin Routine:
        # get the correct context for current trial

        if scene_cat == 'Jungle':
            cor_key = key_jungle
        elif scene_cat == 'Undersea':
            cor_key = key_sea
    TextComponent text_context_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which Context?
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    TextComponent text_sea
      color [set every repeat] = $color_sea
      letterHeight = 0.05
      pos [set every repeat] = pos_sea
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_sea_txt
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    TextComponent text_jungle
      color [set every repeat] = $color_jungle
      letterHeight = 0.05
      pos [set every repeat] = pos_jungle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_jungle_txt
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    KeyboardComponent key_resp_context
      allowedKeys = '1','2'
      correctAns = $cor_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
      syncScreenRefresh = False
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  Routine scene_screen_select
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    CodeComponent code_1
      Code Type = Auto->JS
  Routine print_debug
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print(key_resp_context.keys)
  Routine get_stim_length
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine create_runs_stim_div
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    CodeComponent code_4
      Code Type = Both
      Before JS Experiment:
        let run_stim = [];
        let labels = {};
      Begin JS Routine:
        // Hardcoded number of stimuli
        let stim_num = 80;

        // Create a list of row numbers
        let row_numbers = [];
        for (let i = 0; i < stim_num; i++) {
            row_numbers.push(i);
        }

        // Shuffle the row numbers using Fisher-Yates algorithm
        for (let i = row_numbers.length - 1; i > 0; i--) {
            let j = Math.floor(Math.random() * (i + 1));
            [row_numbers[i], row_numbers[j]] = [row_numbers[j], row_numbers[i]]; // Swap elements
        }

        // Divide into 4 runs
        let run_size = Math.ceil(stim_num / 4);

        for (let i = 0; i < 4; i++) {
            let start = i * run_size;
            let end = start + run_size;
            run_stim.push(row_numbers.slice(start, end));
        }


        // Explicitly log the contents of run_stim arrays
        for (let i = 0; i < run_stim.length; i++) {
            console.log(`Run ${i + 1}:`, run_stim[i]);
        }
        //console.log('test 123 now should come run_stim stuff:');
        //console.log('Content of the first list:', run_stim[0]);
        // Check if run_stim[0] is defined and not empty
        if (run_stim[0] && run_stim[0].length > 0) {
            console.log('First element of first run:', run_stim[0][0]);
        } else {
            console.error('run_stim[0] is undefined or empty!');
        }

        //console.log('rouge code starts to run now, presumably');
        jungle_lbl_text = '';
        sea_lbl_text = '';
        // Function to parse CSV string into an array of objects
        function parseCSV(csvString) {
            const lines = csvString.split('\n').filter(line => line.trim() !== '');
            const headers = lines[0].split(',').map(header => header.trim());
            const result = [];

            console.log('CSV Headers:', headers);

            for (let i = 1; i < lines.length; i++) {
                const obj = {};
                const currentLine = lines[i].split(',').map(cell => cell.trim());

                if (currentLine.length !== headers.length) {
                    console.error(`Row ${i} does not match header length.`);
                    continue;
                }

                for (let j = 0; j < headers.length; j++) {
                    obj[headers[j]] = currentLine[j];
                }
                result.push(obj);
            }

        //    console.log('Parsed CSV Data:', result);
            return result;
        }

        // Convert ArrayBuffer to string
        function arrayBufferToString(buffer) {
            let decoder = new TextDecoder('utf-8');
            return decoder.decode(buffer);
        }

        // Process the CSV data and generate label texts
        function processCSVData2(csvData) {
            let csvString = arrayBufferToString(csvData);
            let data = parseCSV(csvString);

            // Create a dictionary for labels
        //    let labels = {};
            data.forEach(row => {
                let stimulus = row['scene_stimulus'];
                let label = row['scene_label'];

        //        console.log('Processing row:', row); // Debugging output

                if (stimulus && label) {
                    let key = stimulus; // Extract the last 2 characters before '.png'
                    labels[key] = label;
                }
            });

            console.log('Labels Dictionary:', labels);

            // Generate jungle labels text
            console.log('key_J1:',key_J1);
            if (key_J1 === '1') {
                jungle_lbl_text = `1.${labels['J1']}\n2.${labels['J2']}`;
            } else if (key_J1 === '2') {
                console.log('inside if key_J1 = 2');
                jungle_lbl_text = `1.${labels['J2']}\n2.${labels['J1']}`;
                console.log(jungle_lbl_text)
            }

            // Generate sea labels text
            if (key_U1 === '1') {
                console.log('inside if 1');
                sea_lbl_text = `1.${labels['U1']}\n2.${labels['U2']}`;
            } else if (key_U1 === '2') {
                console.log('inside if 2');
                sea_lbl_text = `1.${labels['U2']}\n2.${labels['U1']}`;
            }

            // Print or use the generated labels
            console.log('Jungle Labels Text:', jungle_lbl_text);
            console.log('Sea Labels Text:', sea_lbl_text);
        }

        // Load the CSV file and process it
        let name_list = 'stimuli/cond_lists/scene_names_sub_' + subnum + '.csv';
        let csvData = psychoJS.serverManager.getResource(name_list);

        console.log('if loop calls processCSVData2:');
        if (csvData instanceof ArrayBuffer) {
            processCSVData2(csvData);
        } else {
            console.error('Unexpected data type:', typeof csvData);
        }

        //console.log('end of if loop, processCSVData2 is done, persumably');
      Begin Routine:
        stim_num = 80 # hard coded number of PAs

        # Create a list of row numbers
        row_numbers = list(range(stim_num))
        # Shuffle the row numbers
        np.random.shuffle(row_numbers)

        # divide to 4 runs
        run_stim = np.array_split(row_numbers, 4)
        run_stim = [list(run) for run in run_stim]

        print(run_stim[0])
        print(run_stim[1])
        print(run_stim[2])
        print(run_stim[3])
  Routine is_last
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    CodeComponent code_islast
      Code Type = Auto->JS
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      Begin Routine:
        if run == 3:
            last_run = 0
        else:
            last_run = 1
  Routine subs_rand_vars
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    CodeComponent code_rand_vars
      Code Type = Both
      Before JS Experiment:
        var key_jungle
        var key_sea
        var key_U1
        var key_U2
        var key_J1
        var key_J2
        var key_jungle
        var key_sea
        var color_jungle
        var color_sea
        var pos_sea
        var pos_jungle
        var context_jungle_txt
        var context_sea_txt
      Begin Experiment:
        subnum = int(expInfo['participant'])
        session = expInfo['session']

        print(session)
      Begin JS Experiment:
        subnum = Number.parseInt(expInfo["participant"]);
        session = expInfo["session"];
        console.log(session);
      Begin JS Routine:
        // Function to read and process the CSV file using a Promise
        function loadCSVFile(filePath) {
            return new Promise((resolve, reject) => {
                var request = new XMLHttpRequest();
                request.open('GET', filePath, true);
                request.onreadystatechange = function () {
                    if (request.readyState === 4) {
                        if (request.status === 200) {
                            resolve(request.responseText);
                        } else {
                            reject('Error: ' + request.status);
                        }
                    }
                };
                request.send();
            });
        }

        // Async function to process CSV data and set the variables
        async function processCSVData() {
            try {
                var csvData = await loadCSVFile('counterbalanced_vars.csv');

                var lines = csvData.split('\n');
                var headers = lines[0].split(',');
                var data = lines.slice(1).map(function(line) {
                    var values = line.split(',');
                    var entry = {};
                    headers.forEach(function(header, index) {
                        entry[header] = values[index];
                    });
                    return entry;
                });

                var subnum = parseInt(expInfo['participant']);
                var sub_conds = data.find(function(row) {
                    return parseInt(row['Participant']) === subnum;
                });

                var sub_conds_values = Object.values(sub_conds);

                console.log(sub_conds_values);

                if (sub_conds_values[2] === "0") {
                    key_jungle = "1";
                    key_sea = "2";
                } else {
                    key_jungle = "2";
                    key_sea = "1";
                }
                if (sub_conds_values[3] === "0") {
                    color_jungle = "purple";
                    color_sea = "pink";
                } else {
                    color_jungle = "pink";
                    color_sea = "purple";
                }
                if (sub_conds_values[4] === "0") {
                    key_J1 = "1";
                    key_J2 = "2";
                } else {
                    key_J1 = "2";
                    key_J2 = "1";
                }
                if (sub_conds_values[5] === "0") {
                    console.log('fifth cond in 0');
                    key_U1 = "1";
                    key_U2 = "2";
                } else {
                    console.log('fifth cond in 1');
                    key_U1 = "2";
                    key_U2 = "1";
                }

                console.log({ key_jungle, color_jungle, key_U1, key_J1 });

            } catch (error) {
                console.error('Error loading or processing the CSV file:', error);
            }
        }


        // Async function to run the process and then the subsequent functions
        async function main() {
            await processCSVData(); // Wait for CSV processing to complete

            // Now call the other functions that depend on the variables set in processCSVData
            pos_sea = [];
            pos_jungle = [];
            context_jungle_txt = '';
            context_sea_txt  = '';
            if ((key_jungle === "1")) {
                context_jungle_txt = ("1. " + "Jungle");
                pos_jungle = [0, 0.06];
                context_sea_txt = ("2. " + "Undersea");
                pos_sea = [0, 0];
            } else {
                if ((key_jungle === "2")) {
                    context_sea_txt = ("1. " + "Undersea");
                    pos_sea = [0, 0.06];
                    context_jungle_txt = ("2. " + "Jungle");
                    pos_jungle = [0, 0];
                }
            }

            console.log('context jungle text:',context_jungle_txt);
        //    anotherFunction();
            // Add other dependent functions here
        }

        // Start the process
        main();
      Begin Routine:
        import pandas as pd

        df = pd.read_csv('counterbalanced_vars_behav.csv') # match table to experiment

        ind = df[df['Participant'] == subnum].index[0]
        sub_conds = df.loc[ind,df.columns].values.tolist()
        print(sub_conds)
        # assign context keys
        if sub_conds[2] == 0:
            key_jungle = '1'
            key_sea = '2'
        else:
            key_jungle = '2'
            key_sea = '1'

        # assign categories color
        if sub_conds[3] == 0:
            color_jungle = 'purple'
            color_sea = 'pink'
        else:
            color_jungle = 'pink'
            color_sea = 'purple'

        # assign desert label key numbers:
        if sub_conds[4] == 0:
            # '1'--> jungle A; '2' --> jungle B
            key_J1 = '1'
            key_J2 = '2'
        else:
            # '1'--> jungle B; '2' --> jungle A
            key_J1 = '2'
            key_J2 = '1'

        # assign sea label key numbers:
        if sub_conds[5] == 0:
            # '1'--> sea A; '2' --> sea B
            key_U1 = '1'
            key_U2 = '2'
        else:
            # '1'--> sea B; '2' --> sea A
            key_U1 = '2'
            key_U2 = '1'
    CodeComponent code_context_screen
      Code Type = Both
      Begin Routine:
        # create the text for select context screen based
        #on participant's colors and keys

        #    key_desert = '2'
        #    key_ocean = '1'
        #    color_desert = 'Purple'
        #    color_ocean = 'Pink'

        if key_jungle == '1':
            context_jungle_txt = '1. ' + 'Jungle'
            pos_jungle = (0,0.06)
            context_sea_txt = '2. ' + 'Undersea'
            pos_sea = (0,0)
        elif key_jungle == '2':
            context_sea_txt = '1. ' + 'Undersea'
            pos_sea = (0,0.06)
            context_jungle_txt = '2. ' + 'Jungle'
            pos_jungle = (0,0)
    CodeComponent code_scene_screens
      Code Type = Both
      Before JS Experiment:
        var stim_list
      Begin JS Routine:
        // get the stim list based on group and delay parameters
        if (expInfo['group'] ==='A'){
            if (expInfo['delay'] ==='short'){
                stim_list = ((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_1") + "_run_1.csv");
                }else{
                    if (expInfo['delay'] ==='long'){
                        stim_list = ((("stimuli/stim_lists/stimuli_list_sub_" + subnum) + "_set_2") + "_run_1.csv");
                        }
                    }
            }

        console.log('group:',expInfo['group'],'delay:',expInfo['delay']);
        console.log('stim list path is:',stim_list);
      Begin Routine:
        # create the text to present for the desert scene labels
        # according to counterbalanced variables

        # scene_label --> scene name from stimuli list
        stim_list = 'stimuli/stim_lists/stimuli_list_sub_' + str(subnum) + '_run_1.csv'
        df = pd.read_csv(stim_list)
        # get the unique scene_stimulus and their corresponding scene_label
        labels = df[['scene_stimulus', 'scene_label']].drop_duplicates().reset_index(drop=True)
        #  leave in scene_stimulus only the two characters that represent the scene, before the .png
        labels['scene_stimulus'] = labels['scene_stimulus'].str[-6:-4]
        labels = dict(zip(labels['scene_stimulus'], labels['scene_label']))
        # Set jungle labels text for scene label screen
        if key_J1 == '1':
            jungle_lbl_text = '1.' + labels['J1'] + '\n2.' + labels['J2']
        elif key_J1 == '2':
            jungle_lbl_text = '1.' + labels['J2'] + '\n2.' + labels['J1']

        # Set sea labels text for scene label screen
        if key_U1 == '1':
            sea_lbl_text = '1.' + labels['U1'] + '\n2.' + labels['U2']
        elif key_U1 == '2':
            sea_lbl_text = '1.' + labels['U2'] + '\n2.' + labels['U1']
    CodeComponent code_printexpInfo
      Code Type = Both
      Begin JS Experiment:
        console.log('participant:',expInfo['participant']);
        console.log('session:',expInfo['session']);
        console.log('group:',expInfo['group']);
        console.log('delay:',expInfo['delay']);
    CodeComponent init_counterbalance
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import random


        cond_file = f"stimuli/cond_lists/scene_names_sub_{expInfo['participant']}.csv"
        df = pd.read_csv(cond_file)

        scene_J1_lbl = df.loc[df['scene_stimulus']=='J1','scene_label'].values[0]
        scene_J2_lbl = df.loc[df['scene_stimulus']=='J2','scene_label'].values[0]
        scene_U1_lbl = df.loc[df['scene_stimulus']=='U1','scene_label'].values[0]
        scene_U2_lbl = df.loc[df['scene_stimulus']=='U2','scene_label'].values[0]
  Routine context_confidence
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    CodeComponent code_get_context_choice
      Code Type = Both
      Before JS Experiment:
        var c_k
      Begin JS Routine:
        c_k = false;
        if ((key_resp_context.keys === key_jungle)) {
            c_k=true;
            console.log('Jungle context chosen');
            chosen_cont = "Jungle";
            chosen_cont_color = color_jungle;
        } else {
            if ((key_resp_context.keys === key_sea)) {
                console.log('undersea context chosen');
                c_k=true;
                chosen_cont = "Undersea";
                chosen_cont_color = color_sea;
            } else {
                if (!c_k) {
                    console.log('no context chosen');
                    chosen_cont = "Nothing was chosen";
                    chosen_cont_color = "White";
                }
            }
        }
      Begin Routine:
        # get the chosen context to present above confidence scales

        if key_resp_context.keys == key_jungle:
            chosen_cont = 'Jungle'
            chosen_cont_color = color_jungle
        elif key_resp_context.keys == key_sea:
            chosen_cont = 'Undersea'
            chosen_cont_color = color_sea
        elif key_resp_context.keys == None:
            chosen_cont = 'Nothing was chosen'
            chosen_cont_color = 'White'
    TextComponent text_context_choice
      color [set every repeat] = $chosen_cont_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_cont
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    SliderComponent slider_context_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_context_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine scene_confidence
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    CodeComponent code_get_chosen_scene
      Code Type = Both
      Before JS Experiment:
        var l_k
      Begin JS Routine:
        l_k = false;
        if ((scene_cat === "Jungle")) {
            if ((key_resp_scenes.keys === key_J1)) {
                l_k = true;
                chosen_scene = labels["J1"];
            } else {
                if ((key_resp_scenes.keys === key_J2)) {
                    l_k = true;
                    chosen_scene = labels["J2"];
                } else {
                    if (!l_k) {
                        chosen_scene = "Nothing was chosen";
                        cur_color = "White";
                    }
                }
            }
        } else {
            if ((scene_cat === "Undersea")) {
                if ((key_resp_scenes.keys === key_U1)) {
                    l_k = true;
                    chosen_scene = labels["U1"];
                } else {
                    if ((key_resp_scenes.keys === key_U2)) {
                        l_k = true;
                        chosen_scene = labels["U2"];
                    } else {
                        if (!l_k) {
                            chosen_scene = "Nothing was chosen";
                            cur_color = "Black";
                        }
                    }
                }
            }
        }
      Begin Routine:
        # get the chosen scene to present above confidence scales

        if scene_cat == 'Jungle':
            if key_resp_scenes.keys == key_J1:
                chosen_scene = labels['J1']
            elif key_resp_scenes.keys == key_J2:
                chosen_scene = labels['J2']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'White'
        elif scene_cat == 'Undersea':
            if key_resp_scenes.keys == key_U1:
                chosen_scene = labels['U1']
            elif key_resp_scenes.keys == key_U2:
                chosen_scene = labels['U2']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'White'
    TextComponent text_chosen_scene
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_scene
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    SliderComponent slider_scene_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_scene_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine rest_between_runs
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    TextComponent text_run_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Good Job! You can rest for a moment.

        When you're ready to continue, press the SPACEBAR key.
    KeyboardComponent key_resp_run_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine buffer
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Buffer!!!
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    KeyboardComponent key_resp_buffer
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        console.log('buffer is done')
  Routine code_buffer
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    CodeComponent code_buffer_test
      Code Type = Both
      disabled = True
      Before JS Experiment:
        let labels = {};
      Begin JS Routine:
        console.log('rouge code starts to run now, presumably');
        jungle_lbl_text = '';
        sea_lbl_text = '';
        // Function to parse CSV string into an array of objects
        function parseCSV(csvString) {
            const lines = csvString.split('\n').filter(line => line.trim() !== '');
            const headers = lines[0].split(',').map(header => header.trim());
            const result = [];

            console.log('CSV Headers:', headers);

            for (let i = 1; i < lines.length; i++) {
                const obj = {};
                const currentLine = lines[i].split(',').map(cell => cell.trim());

                if (currentLine.length !== headers.length) {
                    console.error(`Row ${i} does not match header length.`);
                    continue;
                }

                for (let j = 0; j < headers.length; j++) {
                    obj[headers[j]] = currentLine[j];
                }
                result.push(obj);
            }

            console.log('Parsed CSV Data:', result);
            return result;
        }

        // Convert ArrayBuffer to string
        function arrayBufferToString(buffer) {
            let decoder = new TextDecoder('utf-8');
            return decoder.decode(buffer);
        }

        // Process the CSV data and generate label texts
        function processCSVData2(csvData) {
            let csvString = arrayBufferToString(csvData);
            let data = parseCSV(csvString);

            // Create a dictionary for labels
        //    let labels = {};
            data.forEach(row => {
                let stimulus = row['scene_stimulus'];
                let label = row['scene_label'];

                console.log('Processing row:', row); // Debugging output

                if (stimulus && label) {
                    let key = stimulus; // Extract the last 2 characters before '.png'
                    labels[key] = label;
                }
            });

            console.log('Labels Dictionary:', labels);

            // Generate jungle labels text
            console.log('key_J1:',key_J1);
            if (key_J1 === '1') {
                jungle_lbl_text = `1.${labels['J1']}\n2.${labels['J2']}`;
            } else if (key_J1 === '2') {
                console.log('inside if key_J1 = 2');
                jungle_lbl_text = `1.${labels['J2']}\n2.${labels['J1']}`;
                console.log(jungle_lbl_text)
            }

            // Generate sea labels text
            if (key_U1 === '1') {
                console.log('inside if 1');
                sea_lbl_text = `1.${labels['U1']}\n2.${labels['U2']}`;
            } else if (key_U1 === '2') {
                console.log('inside if 2');
                sea_lbl_text = `1.${labels['U2']}\n2.${labels['U1']}`;
            }

            // Print or use the generated labels
            console.log('Jungle Labels Text:', jungle_lbl_text);
            console.log('Sea Labels Text:', sea_lbl_text);
        }

        // Load the CSV file and process it
        let name_list = 'stimuli/cond_lists/scene_names_sub_' + subnum + '.csv';
        let csvData = psychoJS.serverManager.getResource(name_list);

        console.log('if loop calls processCSVData2:');
        if (csvData instanceof ArrayBuffer) {
            processCSVData2(csvData);
        } else {
            console.error('Unexpected data type:', typeof csvData);
        }

        console.log('end of if loop, processCSVData2 is done, persumably');
  Routine set_rows
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        //console.log("run:", run); // Should print 1, 2, 3, or 4
        //console.log("run_stim:", run_stim); // Should be an array of 4 arrays

        let runIndex = Number.parseInt(run); // Convert and adjust for 0-based index
        //console.log("runIndex:", runIndex);

        if (runIndex >= 0 && runIndex < run_stim.length) {
            selected_rows = run_stim[runIndex];
            console.log("selected_rows:", selected_rows);
        } else {
            console.error("Invalid run index:", runIndex, "for run_stim array.");
        }

        //console.log("run_stim length:", run_stim.length);
        run_stim.forEach((run, index) => {
            console.log(`run_stim[${index}]:`, run);
        });

        run_stim.forEach((arr, index) => {
            if (arr === undefined || arr === null) {
                console.error(`run_stim[${index}] is undefined or null`);
            } else {
                console.log(`run_stim[${index}]:`, arr);
            }
        });

        //console.log('trials loop is going to start now!');
        //console.log("Run value before loop:", run);
        //console.log("pos_sea:", pos_sea);
        //console.log("context jungle text:",context_jungle_txt);
  Routine forked_instructions
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    CodeComponent code_end_inst
      Code Type = Both
      Begin JS Experiment:
        window.end_inst = undefined;
      Begin JS Routine:
        // present either move to a new enconding set or end of experiment
        if (expInfo['group']==='A' && expInfo['delay']==='short'){
            // instructions to move to a new enconding set
            // in the meantime this is for 1 session experiment only (next line for two sessions commented out).
        //    window.end_inst = 'Now you will continue to a second item-scene association task. The scenes will remain the same, but the items will be brand new.\n This will be the last task for today (the memory test for this second item-scene pairs will occur three days from now, in your second session).\n\nPress SPACEBAR and "OK" in the prompted window to continue to the next (and last) task.';
            window.end_inst = 'Congratulations! You are done with the experiment!\nWe thank you for your participation.\n\nPress SPACEBAR and then "OK" in the prompted window to receive a Prolific completion code.';
            console.log('end_inst in if:',window.end_inst);
            }else{
                window.end_inst = 'Congratulaitons! You have finished our two-session experiment!\nWe thank you for your participation.\nPress SPACEBAR and then "OK" in the prompted window to receive a Prolific completion code.';
                }
        // !!! rememeber to set the test component to window.end_inst when running in pavlovia/java!!!

        //console.log('end_inst after if:',window.end_inst);
      Begin Routine:
        # for local python version, this is the variable to be called for in the text component.
        end_inst = 'Congratulations! You are done with the experiment!\nWe thank you for your participation.'
    TextComponent text_end_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_inst
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    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_url
      Code Type = Both
      Begin JS Experiment:
        let completion_url;
      End JS Routine:
        two_sess = false;
        if (two_sess == true){
            if (expInfo['group']==='A'){
                if (expInfo['delay']==='short'){
                    expInfo['delay'] ='long';
                    console.log('delay changed to:',expInfo['delay']);
                    completion_url = 'https://run.pavlovia.org/nitzanlubi/sbl_encoding_exp/?group='
                        + expInfo['group']
                        + '&participant=' + expInfo['participant']
                        + '&session=' + expInfo['session']
                        + '&delay=' + expInfo['delay'];
                    console.log('completion_url:',completion_url);
                    }else{
                        completion_url = 'https://app.prolific.com/submissions/complete?cc=C14LKWF2';
                        }
                }
            }else{
                completion_url = 'https://app.prolific.com/submissions/complete?cc=CUFOIWKV';
                }

        console.log('url again:',completion_url);
        //window.location.href = completion_url;
        psychoJS.setRedirectUrls(completion_url, '');
  Routine set_instructions
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    CodeComponent code_set_ret_inst
      Code Type = Both
      Begin JS Experiment:
        var inst_ret
      Begin JS Routine:
        //if (expInfo['group']==='A' && expInfo['session']==='1'){
        //    inst_ret = 'In this task, you will see only the items that you have seen in the previous item-scene association task.\n\nRiminder: During the presentation of each item, imagine the background scene where the item appeared in as much detail as possible.\n\nThen answer the memory questions about the type and name of the scene you imagined. At this point just report what you imagined when the item appeared, do not continue to recall the scene!\n\the names of the two scenes from the correct context and choose the name of the specific scene where the item appeared, and again indicate your confidence in your choice. If you were correct about the context, you will see the scene names from the context you chose. If you were incorrect you will see the names from the other context and have the chance to guess.\n\nWhen you are ready to begin, press SPACEBAR.';
        //    }else{
        //        if (expInfo['group']==='A' && expInfo['session']==='2'){
        //           inst_ret = 'In this task, you will see only the items that you have seen in the second item-scene association task three days ago.\n\nDuring the presentation of each item, you will need to imagine the background scene where the item appeared in as much detail as possible.\n\nThen you will answer a few questions using the "1","2" and "3" keyboard keys. First, you will indicate the general context in which the item appeared (jungle or undersea) and how confident you are about your choice. Next, regardless of your choice of context, you will see the names of the two scenes from the correct context and choose the name of the specific scene where the item appeared, and again indicate your confidence in your choice. If you were correct about the context, you will see the scene names from the context you chose. If you were incorrect you will see the names from the other context and have the chance to guess.\n\nWhen you are ready to begin, press the SPACEBAR key.';
        //           }
        //       }
        //add group B logic
  Routine ret_inst_scr
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will see the items (animals and objects) you saw in the previous item-scene association task.

        During the presentation of each item, imagine the background scene where the item appeared in as much detail as possible.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine blank3000
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    TextComponent text_blank3000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine blank1000
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine blank500
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ret_inst_2
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  Routine ret_inst2
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    TextComponent text_instructions_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        After the item disappears you will answer the memory questions and confidence ratings about the scene. At this point please stop recalling the scene and just report what you chose to imagine.

        PLEASE TRY USING THE FULL CONFIDENCE RATING SCALE:

        "1. not confident": choose this option if you had no idea whatsoever which type and/or specific scene was associated with the item.

        "2.somewhat confident": choose this when you had some recollection or a hunch but you're not certain about it.

        "3.very confident": Choose this when you're quite certain about your choices.

        Press SPACEBAR to start the task.
    KeyboardComponent key_resp_start_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine blank3000_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Starting in a moment

        Good luck!
  Routine scene_names_reminder
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    TextComponent text_reminder
      letterHeight = 0.035
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Reminder: these are the names of the four scenes
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    ImageComponent image1
      image [set every repeat] = stimuli/scenes/scene_J1.png
      pos = (-.35, .15)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = stimuli/scenes/scene_J2.png
      pos = (.35, .15)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = stimuli/scenes/scene_U1.png
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = stimuli/scenes/scene_U2.png
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J1_lbl
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    TextboxComponent textbox2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, .35)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J2_lbl
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    TextboxComponent textbox3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U1_lbl
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    TextboxComponent textbox4
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (.35, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U2_lbl
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    KeyboardComponent key_reminder
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  Routine subs_rand_vars
  Routine set_instructions
  Routine ret_inst_scr
  Routine ret_inst2
  Routine scene_names_reminder
  Routine blank3000_2
  Routine create_runs_stim_div
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs_params.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'run': 0},
      {'run': 1},
      {'run': 2},
      {'run': 3}]
    Routine set_rows
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $run_stim[run]
      conditionsFile = $stim_list
      loopType = sequential
      nReps = 1
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      conditions:
        [{'scene_stimulus': 'stimuli/scenes/desert/desert_A.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/deer.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Negvi', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/elephant.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Somar', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/ocean/ocean_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/lion1.png', 'congruency': 'ci', 'scene_cat': 'Ocean', 'scene_label': 'Tulon', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_A.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/leopard.png', 'congruency': 'cs', 'scene_cat': 'Ocean', 'scene_label': 'Negvi', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/desert/desert_B.jpeg', 'item_stimulus': 'stimuli/items/animals/desert/zebra.png', 'congruency': 'cs', 'scene_cat': 'Desert', 'scene_label': 'Somar', 'item_cat': 'd', 'item_type': 'a'},
        {'scene_stimulus': 'stimuli/scenes/ocean/ocean_A.jpeg', 'item_stimulus': 'stimuli/items/objects/desert/binoculars.png', 'congruency': 'ci', 'scene_cat': 'Ocean', 'scene_label': 'Malbow', 'item_cat': 'd', 'item_type': 'o'}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
      Routine item_imagine_scene
      Routine blank1000
      Routine select_context
      Routine blank500
      Routine context_confidence
      Routine blank1000
      Routine select_scene_name
      Routine blank500
      Routine scene_confidence
      Routine blank3000
    LoopTerminator trials
    Routine is_last
    LoopInitiator show_rest_screen loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = last_run
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      Routine rest_between_runs
    LoopTerminator show_rest_screen
  LoopTerminator runs
  Routine ret_end_screen
  Routine forked_instructions
