PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1512, 982]
  expName = SBL_superimposed_training_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine overall_instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the items and scenes memory experiment!

        In this first task, you will learn the names and visual details of four scenes.

        You will then practice visualizing the scenes in detail.

        Finally, you will have a short practice run of the next tasks which you will undertake later in the study session.

        Press SPACEBAR to continue.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine part1
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    CodeComponent code_present_scene_name
      Code Type = Both
      Begin Experiment:
        templates = {
        'J1': "{name} is a bright tropical jungle with large buttress-root trees and warm sunlight filtering through the canopy. Visible sunbeams create strong light–shadow contrast on a leaf-covered forest floor, and the space feels open at ground level with sturdy trunks, broad green foliage, and large red and yellow flowers.",

        'J2': "{name} is a cool, mist-filled cloud jungle with soft, diffuse lighting and low visibility. Tall trees and the ground are heavily covered in thick green moss, with moisture clinging to surfaces. The damp, foggy air mutes colors and reduces contrast, creating a consistently hazy and subdued visual environment.",

        'U1': "{name} is a bright, shallow ocean scene with clear blue water and strong sunlight streaming down in visible beams. The seafloor is mostly pale, rippled sand with a few large smooth rocks where small coral clusters grow. The space feels open with high visibility and a warm tropical atmosphere.",

        'U2': "{name} is a cool-toned ocean scene with a riverbed of smooth, rounded pebbles and larger stones rather than sand. The water is slightly hazy with soft, diffuse lighting and no visible sunbeams. Thick green-yellow aquatic plants and muted bluish tones create a more enclosed, freshwater-like atmosphere."
        }
      Begin Routine:
        if scene_stimulus in ['J1', 'J2']:
            txt_scenename = scene_label.upper()
            txt_scene_present = templates[scene_stimulus].format(name=txt_scenename)
            if scene_stimulus in ['J1']:
                p1_scene = 'stimuli/scenes/p1_scenes/P1_J1.jpg'
            else:
                p1_scene = 'stimuli/scenes/p1_scenes/P1_J2.jpg'
        else:
            txt_scenename = scene_label.upper()
            txt_scene_present = templates[scene_stimulus].format(name=txt_scenename)
            if scene_stimulus in ['U1']:
                p1_scene = 'stimuli/scenes/p1_scenes/P1_U1.jpg'
            else:
                p1_scene = 'stimuli/scenes/p1_scenes/P1_U2.jpg'
    ImageComponent scene_image_part1
      image [set every repeat] = $p1_scene
      pos = (0, -.06)
      size = (None, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent scene_name_part1
      letterHeight = 0.03
      pos [set every repeat] = (0, .32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_scene_present
      wrapWidth = 1.35
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    TextComponent text_scenename
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .42)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt_scenename
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    TextComponent text_memorize
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Try to memorize the name and the visual details of the scene.
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    KeyboardComponent key_sceneLearn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine part1_compare
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    CodeComponent code_get_scenes
      Code Type = Auto->JS
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      Begin Routine:
        # get the scene paths and corresponding labels
        # df = pd.read_csv('stimuli/cond_lists/scene_names_sub_' + subnum + '.csv')
        df = pd.read_csv(study_scenes)
        #df['scene_stimulus'] = df['scene_stimulus'].str[-6:-4]
        #labels = dict(zip(df['scene_stimulus'], df['scene_label']))

        scene_J1 = df[df['scene_stimulus'].str.contains('J1')]['scene_img'].values[0]
        scene_J1_lbl = df[df['scene_stimulus'].str.contains('J1')]['scene_label'].values[0]
        scene_J2 = df[df['scene_stimulus'].str.contains('J2')]['scene_img'].values[0]
        scene_J2_lbl = df[df['scene_stimulus'].str.contains('J2')]['scene_label'].values[0]
        scene_U1 = df[df['scene_stimulus'].str.contains('U1')]['scene_img'].values[0]
        scene_U1_lbl = df[df['scene_stimulus'].str.contains('U1')]['scene_label'].values[0]
        scene_U2 = df[df['scene_stimulus'].str.contains('U2')]['scene_img'].values[0]
        scene_U2_lbl = df[df['scene_stimulus'].str.contains('U2')]['scene_label'].values[0]
    ImageComponent image1
      image [set every repeat] = $scene_J1
      pos = (-.35, .20)
      size = (.60, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $scene_J2
      pos = (.35, .2)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $scene_U1
      pos = (-.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $scene_U2
      pos = (.35, -.3)
      size = (.6, .3375)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox1
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-.35, .42)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J1_lbl
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    TextboxComponent textbox2
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (.35, .42)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_J2_lbl
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    TextboxComponent textbox3
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-.35, -.08)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U1_lbl
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    TextboxComponent textbox4
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (.35, -.08)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scene_U2_lbl
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    KeyboardComponent key_compare
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part1_instructions
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    TextComponent text_instructions_part1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1.
        In this part, you will learn about four scenes.

        Please pay attention to the name and to the visual details of each scene. The name will appear above the image.

        Press SPACEBAR to go to the next scene after you have fully learned the current scene.

        You will be asked to name and visualize them in detail later on.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_part1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part1_instructions_2
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    TextComponent text_instructions_part1_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now you will view all four scenes at once to compare them.

        Please pay attention to the name and to the visual details of each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_instructions_part1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part2_instructions
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    TextComponent text_instructions_part2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 2.

        In this part, you will be asked to choose the correct name for each scene.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part2
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    ImageComponent scene_part2
      image [set every repeat] = $scene_image
      size = (960, 540)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine part2_question
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    CodeComponent code_part2_txt
      Code Type = Auto->JS
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      Begin Routine:
        text_part2_qst = 'What is the name of the scene?\n\n1. ' +scene_J1_lbl + '\n2. ' + scene_J2_lbl + '\n3. ' +  scene_U1_lbl + '\n4. ' +  scene_U2_lbl
    TextComponent text_part2_question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_part2_qst
      wrapWidth = 1.2
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    KeyboardComponent key_part2
      allowedKeys = '1','2','3','4'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_part2
      Code Type = Auto->JS
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      Begin Experiment:
        total_acc = 0
        logic_vec = [False]*4
      End Routine:
        if(key_part2.corr ==1):
            logic_vec[correct_key-1] = True
        elif (key_part2.corr ==0):
            logic_vec[correct_key-1] = False

        if all(logic_vec):
            part2_loop.finished = True
  Routine part3_instructions
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    TextComponent text_part3_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 3.

        In this part, you will practice visualizing the scenes in detail.

        Press SPACEBAR to continue.
    KeyboardComponent key_part3_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part2_feedback
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    CodeComponent code_part2_feedback
      Code Type = Py
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      Begin Experiment:
        msg="doh!"
      Begin Routine:
        if not key_part2.keys :
            msg="Failed to respond"
        elif key_part2.corr:
            msg="Correct!"
        else:
            msg="Incorrect!"
    TextComponent text_part2_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine part4_instructions
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    CodeComponent code_training_vars
      Code Type = Auto->JS
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      Begin Routine:
        # allocate participant to relatedness response key accprding
        # to counterbalanced_vars.xlsx

        import pandas as pd
        subnum = int(expInfo['participant'])
        if subnum > 2000: # squid MEG study
            df_vars = pd.read_csv('counterbalanced_vars_meg_main.csv')
        elif subnum > 1000:      # MEG pilot study
            df_vars = pd.read_csv('counterbalanced_vars_meg_pilot.csv')
        elif subnum < 1000: # behavioral study
            df_vars = pd.read_csv('counterbalanced_vars_behav.csv')

        ind = df_vars[df_vars['Participant'] == subnum].index[0]
        sub_conds = df_vars.loc[ind,df_vars.columns].values.tolist()
        # assign context keys
        if sub_conds[1] == 0:
            key_related = 'q'
            key_unrelated = 'p'
            #instruction_text = 'If they are related, press Q\nIf they are unrelated, press P\n\nPress SPACEBAR to continue.'
            #New instructions:
            instruction_text = (
                    'If they are related, press Q\n'
                    'If they are unrelated, press P\n\n'
                    'IMPORTANT:\n'
                    'ONLY respond when the screen says:\n'
                    '"Related (Q) or Unrelated (P)"\n\n'
                    'Do NOT respond while:\n'
                    '- the scene and item are displayed\n'
                    '- the fixation cross (+) is displayed\n'
                    'Wait until the response screen appears, then press P or Q.\n\n'
                    'Press SPACEBAR to continue.'
                )
        elif sub_conds[1] == 1:
            key_related = 'p'
            key_unrelated = 'q'
            #instruction_text = 'If they are related, press P\nIf they are unrelated, press Q\n\nPress SPACEBAR to continue.'
            #New Instructions:
            instruction_text = (
                    'If they are related, press P\n'
                    'If they are unrelated, press Q\n\n'
                    'IMPORTANT:\n'
                    'ONLY respond when the screen says:\n'
                    '"Related (P) or Unrelated (Q)"\n\n'
                    'Do NOT respond while:\n'
                    '- the scene and item are displayed\n'
                    '- the fixation cross (+) is displayed\n'
                    'Wait until the response screen appears, then press P or Q.\n\n'
                    'Press SPACEBAR to continue.'
                )
    TextComponent text_part4_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 4.

        Now that you have learned to name and imagine the four scenes in detail, you will have a short practice run in the two tasks that you will undertake soon.

        Press SPACEBAR to continue.
    KeyboardComponent key_part4_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine blank2000
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine scene_item_presentation
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    ImageComponent image_scene
      image [set every repeat] = $scene_stimulus
      size = (1.78, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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    ImageComponent image_item
      image [set every repeat] = $item_stimulus
      size = (300, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = pix
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  Routine congruency_response
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    CodeComponent code_cor_resp
      Code Type = Auto->JS
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      Begin Routine:
        if congruency == 'sc':
            cor_key = key_related
        elif congruency == 'si':
            cor_key = key_unrelated

        txt_qst = 'Related (' + key_related.upper() + ')\nor Unrelated (' + key_unrelated.upper() + ')'
    TextComponent text_congruency
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $txt_qst
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    KeyboardComponent key_resp_congruency
      allowedKeys = 'q','p'
      correctAns = $cor_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine end_screen
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Good job! You have finished the training task.
    KeyboardComponent key_end
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine part3_visualize
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    CodeComponent code_skip_2
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        #if skipTrial:
        #    continueRoutine = False

        if skipVisRate:
            continueRoutine = False
    TextComponent text_visualize
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $label_current
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  Routine part3_rate
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    CodeComponent code_skip_3
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        #if skipTrial:
        #    continueRoutine = False

        if skipVisRate:
            continueRoutine = False
    TextComponent text_rate
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How vivid was your visualization?

        Answer the question by pressing "1", "2", "3", or "4"

        1. could not visualize
        2. some visualization
        3. good visualization
        4. vivid visualization
    KeyboardComponent key_rate
      allowedKeys = '1','2','3','4'
      correctAns = '3', '4'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine part3_question
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    CodeComponent code_skip_4
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        #if skipTrial:
        #    continueRoutine = False

        if skipQuestion:
            continueRoutine = False
    TextComponent text_question
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_option
      letterHeight = 0.045
      pos = (0, -.20)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
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    KeyboardComponent key_question
      allowedKeys = '1','2', '3', '4'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Choose the correct answer
      wrapWidth = 1.2
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    CodeComponent code_part3
      Code Type = Auto->JS
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      Begin Routine:
        rate_ans = key_rate.keys
        myReps = 1
      End Routine:
        #if key_question.corr == 1:
        #    logic_vec_ans[qst_num] = True
        #    if (rate_ans == "3" or rate_ans == "4"):
        #        myReps = 0
        #    else:
        #        myReps = 1
        #else:
        #    myReps = 1
        #
        #if all(logic_vec_ans) and (rate_ans == "3" or rate_ans == "4"):
        #    visualization_loop.finished = True

        if key_question.corr == 1:
            logic_vec_ans[qst_num] = True
            if (rate_ans == "3" or rate_ans == "4"):
                myReps = 0
            else:
                myReps = 1
        else:
            if all(logic_vec_ans) and (rate_ans == "3" or rate_ans == "4"):
                myReps = 0
            else:
                myReps = 1

        if all(logic_vec_ans) and (rate_ans == "3" or rate_ans == "4"):
            visualization_loop.finished = True
  Routine part3_visualize_2
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    TextComponent text_visualize_2
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Desert B
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  Routine part3_visualize_3
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    TextComponent text_visualize_3
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Ocean A
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  Routine part3_visualize_4
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    TextComponent text_visualize_4
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please visualize the scene in as much detail as possible
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    TextboxComponent textbox_scene_name_4
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Ocean B
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  Routine study_again
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    CodeComponent code_skip_5
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        #if skipTrial:
        #    continueRoutine = False

        if skipVisRate:
            continueRoutine = False
    ImageComponent study_image1
      image [set every repeat] = $scene_again
      size = (960, 540)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent study_name1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_current
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    KeyboardComponent key_sceneLearn_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -.38)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR when you've finishd studying
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Study the scene again
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  Routine study_again2
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    ImageComponent study_image1_2
      image = scenes/Desert B.png
      size = (960, 540)
      startVal [time (s)] = 0.0
      units = pix
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  Routine get_sub_vars
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    CodeComponent code_get_sub_vars
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import random

        subnum = expInfo['participant']
        #df = pd.read_csv('stimuli/cond_lists/scene_names_sub_' + subnum + '.csv')
        #print(df[df['scene_stimulus']=='J1']['scene_label'])
        study_scenes = f"stimuli/cond_lists/scene_names_sub_{subnum}.csv"
        print("scene labels file:", study_scenes)
  Routine reset_vis_vars
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    CodeComponent code_reset_vars
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
        #adding a shuffling procedure so the order is randomized:
        labelStr = ["J1", "J2", "U1", "U2"]
        shuffle(labelStr)
      Begin Routine:
        #deleted for the shuffling procedure happening in Begin experiment" tab
        #labelStr = ["J1", "J2", "U1", "U2"]
        lbl = labelStr[count]
        vis_table = f"stimuli/vis_lists/visualization_{lbl}_sub_{subnum}.csv"
        logic_vec_ans = [False]*4

        count += 1
        if count == 4:
            last_scene = 0
        else:
            last_scene = 1
  Routine msg_next_scene
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    TextComponent text_next_scene
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Good!

        Let's move to the next scene.
  Routine scene_item_presentation_3
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    ImageComponent image_scene_2
      image [set every repeat] = $scene_stimulus
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent image_item_2
      image [set every repeat] = $item_stimulus
      size = (300, 300)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
      units = pix
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  Routine blank1000
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    CodeComponent code_skip_1
      Code Type = Both
      Begin JS Routine:
        if (skipTrial === true) {
            continueRoutine = false;
        }
      Begin Routine:
        #if skipTrial:
        #    continueRoutine = False

        if skipVisRate:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine item_imagine_scene
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    TextComponent text_imagine
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Imagine the associated scene
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    ImageComponent item_cue
      image [set every repeat] = $item_stimulus
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_remember
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_keypress
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Press 'SPACEBAR' when you imagine the scene.
  Routine select_context
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    CodeComponent code_cor_context_key
      Code Type = Auto->JS
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      Begin Routine:
        # get the correct context for current trial

        if scene_cat == 'Jungle':
            cor_key = key_jungle
        elif scene_cat == 'Undersea':
            cor_key = key_sea
    TextComponent text_contrext_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which Type of scene did you imagine?
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    TextComponent text_sea
      color [set every repeat] = $color_sea
      letterHeight = 0.05
      pos [set every repeat] = pos_sea
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_sea_txt
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    TextComponent text_jungle
      color [set every repeat] = $color_jungle
      letterHeight = 0.05
      pos [set every repeat] = pos_jungle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $context_jungle_txt
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    KeyboardComponent key_resp_context
      allowedKeys = '1','2'
      correctAns = $cor_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
      syncScreenRefresh = False
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  Routine context_confidence
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    CodeComponent code_get_context_choice
      Code Type = Auto->JS
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      Begin Routine:
        # get the chosen context to present above confidence scales

        if key_resp_context.keys == key_jungle:
            chosen_cont = 'Jungle'
            chosen_cont_color = color_jungle
        elif key_resp_context.keys == key_sea:
            chosen_cont = 'Undersea'
            chosen_cont_color = color_sea
        elif key_resp_context.keys == None:
            chosen_cont = 'Nothing was chosen'
            chosen_cont_color = 'Black'
    TextComponent text_context_choice
      color [set every repeat] = $chosen_cont_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_cont
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    SliderComponent slider_context_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_context_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
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  Routine select_scene_name
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    CodeComponent code_set_scene_vars
      Code Type = Auto->JS
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      Begin Routine:
        # set current trial's scene labels, color and correct response key
        # according to encoding context

        if scene_cat == 'Jungle':
            cur_labels = jungle_lbl_text
            cur_color = color_jungle
        elif scene_cat == 'Undersea':
            cur_labels = sea_lbl_text
            cur_color = color_sea

        if 'J1' in scene_stimulus:
            cor_scene_key = key_J1
        elif 'J2' in scene_stimulus:
            cor_scene_key = key_J2
        elif 'U1' in scene_stimulus:
            cor_scene_key = key_U1
        elif 'U2' in scene_stimulus:
            cor_scene_key = key_U2
    TextComponent text_scene_headline
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = The type was
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    TextComponent text_actual_context
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $scene_cat
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    TextComponent text_q_scene
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Which specific scene was it?
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    TextComponent text_labels
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $cur_labels
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    KeyboardComponent key_resp_scenes
      allowedKeys = '1','2'
      correctAns = $cor_scene_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine select_confidence
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    CodeComponent code_get_chosen_scene
      Code Type = Auto->JS
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      Begin Routine:
        # get the chosen scene to present above confidence scales

        if scene_cat == 'Jungle':
            if key_resp_scenes.keys == key_J1:
                chosen_scene = labels['J1']
            elif key_resp_scenes.keys == key_J2:
                chosen_scene = labels['J2']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'Black'
        elif scene_cat == 'Undersea':
            if key_resp_scenes.keys == key_U1:
                chosen_scene = labels['U1']
            elif key_resp_scenes.keys == key_U2:
                chosen_scene = labels['U2']
            elif key_resp_scenes.keys == None:
                chosen_scene = 'Nothing was chosen'
                cur_color = 'Black'
    TextComponent text_chosen_scene
      color [set every repeat] = $cur_color
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $chosen_scene
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    SliderComponent slider_scene_conf
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('1.Not confident','2.Somewhat confident','3.Very confident')
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_scene_conf
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
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  Routine end_screen_2
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    TextComponent text_end_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

        You're done with the training.
        Soon we're going to start the two tasks.
    KeyboardComponent key_resp_exit
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine do_part_4
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    CodeComponent code
      Code Type = Auto->JS
  Routine get_stim_list
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    CodeComponent code_get_stim_list
      Code Type = Both
      Begin JS Routine:
        subnum = expInfo["participant"];
        stim_list = "stimuli/stim_lists/stimuli_list_training_sub_" + subnum + ".csv";
      Begin Routine:
        subnum = expInfo['participant']
        stim_list = "stimuli/stim_lists/stimuli_list_training_sub_" + subnum + ".csv"
  Routine skip_answered_questions
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    CodeComponent code_skip_qst
      Code Type = Both
      Begin JS Routine:
        if (logic_vec_ans[qst_num] === true) {
            skipTrial = true;
            console.log('should skip question',qst_num);
        } else {
            skipTrial = false;
        }
      Begin Routine:
        #if logic_vec_ans[qst_num] is True:
        #    skipTrial = True
        #    print('should skip question', qst_num)
        #else:
        #    skipTrial = False

        all_done = all(logic_vec_ans)
        skipVisRate = logic_vec_ans[qst_num] and not all_done
        skipQuestion = logic_vec_ans[qst_num] or all_done
  Routine enc_inst_2
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    TextComponent text_relatedness_keys
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent key_proceed_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine enc_instruction_screen
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    TextComponent text_enc_instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the first item-scene association task, you will see different items (objects or animals) placed in one of the jungle or undersea scenes you memorized previously. After each presentation of an item and a scene, you will be asked to report whether they are related or unrelated.

        What does “related” mean?

        An animal is related to a scene if it is plausible it would live in such an environment in real life. If not, it is unrelated.

        An object is related to a scene if it is plausible it would be used in such an environment in real life. If not, it is unrelated.

        Press SPACEBAR to continue.
    KeyboardComponent key_proceed
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine blank1000_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine ret_inst_gen
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        Now you will learn about the memory task. It is a bit more complicated than the previous task, with a few changing screens. Please read carefully the detailed instructions before starting the practice run.

        Press SPACEBAR to continue.
    KeyboardComponent key_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine ret_inst_1
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    CodeComponent code_ret_rand_vars
      Code Type = Auto->JS
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      Begin Routine:
        # assign context keys
        if sub_conds[2] == 0:
            key_jungle = '1'
            key_sea = '2'
        else:
            key_jungle = '2'
            key_sea = '1'

        # assign categories color
        if sub_conds[3] == 0:
            color_jungle = 'purple'
            color_sea = 'pink'
        else:
            color_jungle = 'pink'
            color_sea = 'purple'

        # assign desert label key numbers:
        if sub_conds[4] == 0:
            # '1'--> jungle A; '2' --> jungle B
            key_J1 = '1'
            key_J2 = '2'
        else:
            # '1'--> jungle B; '2' --> jungle A
            key_J1 = '2'
            key_J2 = '1'

        # assign sea label key numbers:
        if sub_conds[5] == 0:
            # '1'--> sea A; '2' --> sea B
            key_U1 = '1'
            key_U2 = '2'
        else:
            # '1'--> sea B; '2' --> sea A
            key_U1 = '2'
            key_U2 = '1'
    CodeComponent code_ret_context_screen
      Code Type = Auto->JS
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      Begin Routine:
        # create the text for select context screen based
        #on participant's colors and keys

        #    key_desert = '2'
        #    key_ocean = '1'
        #    color_desert = 'Purple'
        #    color_ocean = 'Pink'

        if key_jungle == '1':
            context_jungle_txt = '1. ' + 'Jungle'
            pos_jungle = (0,0.06)
            context_sea_txt = '2. ' + 'Undersea'
            pos_sea = (0,0)
        elif key_jungle == '2':
            context_sea_txt = '1. ' + 'Undersea'
            pos_sea = (0,0.06)
            context_jungle_txt = '2. ' + 'Jungle'
            pos_jungle = (0,0)
    CodeComponent code_ret_scene_screens
      Code Type = Auto->JS
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      Begin Routine:
        # create the text to present for the desert scene labels
        # according to counterbalanced variables

        # get the unique scene_stimulus and their corresponding scene_label

        labels = df[['scene_stimulus', 'scene_label']]
        labels = dict(zip(labels['scene_stimulus'], labels['scene_label']))
        # Set jungle labels text for scene label screen
        if key_J1 == '1':
            jungle_lbl_text = '1.' + labels['J1'] + '\n2.' + labels['J2']
        elif key_J1 == '2':
            jungle_lbl_text = '1.' + labels['J2'] + '\n2.' + labels['J1']

        # Set sea labels text for scene label screen
        if key_U1 == '1':
            sea_lbl_text = '1.' + labels['U1'] + '\n2.' + labels['U2']
        elif key_U1 == '2':
            sea_lbl_text = '1.' + labels['U2'] + '\n2.' + labels['U1']
    ImageComponent image_inst1
      image = stimuli/instructions_imgs/inst1.png
      size = (1.778, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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  Routine ret_inst_3
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    ImageComponent image_inst3
      image = stimuli/instructions_imgs/inst3.png
      size = (1.778, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine ret_inst_2
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    ImageComponent image_inst2
      image = stimuli/instructions_imgs/inst2.png
      size = (1.778, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine ret_inst_4
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    ImageComponent image_inst4
      image = stimuli/instructions_imgs/inst4.png
      size = (1.778, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine ret_inst_5
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  Routine ret_inst_6
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  Routine blank500
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank3000
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    TextComponent text_blank3000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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Flow
  Routine get_sub_vars
  Routine overall_instructions
  Routine part1_instructions
  LoopInitiator trials_part1 loopType="TrialHandler"
    conditionsFile = $study_scenes
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('scene_stimulus', 'J1'), ('scene_label', 'Malbow'), ('scene_img', 'stimuli/scenes/scene_J1.png'), ('correct_key', 1)]),
      OrderedDict([('scene_stimulus', 'U2'), ('scene_label', 'Negvi'), ('scene_img', 'stimuli/scenes/scene_U2.png'), ('correct_key', 2)]),
      OrderedDict([('scene_stimulus', 'U1'), ('scene_label', 'Somar'), ('scene_img', 'stimuli/scenes/scene_U1.png'), ('correct_key', 3)]),
      OrderedDict([('scene_stimulus', 'J2'), ('scene_label', 'Tulon'), ('scene_img', 'stimuli/scenes/scene_J2.png'), ('correct_key', 4)])]
    Routine part1
  LoopTerminator trials_part1
  Routine part1_instructions_2
  Routine part1_compare
  LoopInitiator skip_to_part4_debug loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine part2_instructions
    LoopInitiator skip_loop_debug loopType="TrialHandler"
      loopType = random
      nReps = 1
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      LoopInitiator part2_loop loopType="TrialHandler"
        conditionsFile = scene_stims.xlsx
        loopType = random
        nReps = 99
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        conditions:
          [{'scene_image': 'stimuli/scenes/scene_J1.png', 'correct_key': 1},
          {'scene_image': 'stimuli/scenes/scene_J2.png', 'correct_key': 2},
          {'scene_image': 'stimuli/scenes/scene_U1.png', 'correct_key': 3},
          {'scene_image': 'stimuli/scenes/scene_U2.png', 'correct_key': 4}]
        Routine part2
        Routine part2_question
        Routine part2_feedback
      LoopTerminator part2_loop
      Routine part3_instructions
      LoopInitiator part3_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 4
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        conditions:
          [{'scene_image': 'stimuli/scenes/scene_J1.png', 'correct_key': 1},
          {'scene_image': 'stimuli/scenes/scene_J2.png', 'correct_key': 2},
          {'scene_image': 'stimuli/scenes/scene_U1.png', 'correct_key': 3},
          {'scene_image': 'stimuli/scenes/scene_U2.png', 'correct_key': 4}]
        Routine reset_vis_vars
        LoopInitiator visualization_loop loopType="TrialHandler"
          conditionsFile = $vis_table
          loopType = random
          nReps = 99
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          conditions:
            [OrderedDict([('qst_num', 0), ('question', 'Were there flowers in the scene? '), ('options', '1. Yes\n2. No'), ('correct_answer', 2), ('label_current', 'Negvi'), ('scene_again', 'stimuli/scenes/scene_J1.png')]),
            OrderedDict([('qst_num', 1), ('question', 'Was the ground visible? If so, was it green or brown?'), ('options', "1. Yes, Brown\n2. Yes, Grassy\n3. No, the ground wasn't visable"), ('correct_answer', 2), ('label_current', 'Negvi'), ('scene_again', 'stimuli/scenes/scene_J1.png')]),
            OrderedDict([('qst_num', 2), ('question', 'Where were the two closest tree trunks: left or right?'), ('options', '1. Left\n2. Right'), ('correct_answer', 1), ('label_current', 'Negvi'), ('scene_again', 'stimuli/scenes/scene_J1.png')]),
            OrderedDict([('qst_num', 3), ('question', 'Where could the sky be seen in the scene?'), ('options', '1. Upper middle section\n2. Upper right section\n3. Nowhere'), ('correct_answer', 1), ('label_current', 'Negvi'), ('scene_again', 'stimuli/scenes/scene_J1.png')])]
          Routine skip_answered_questions
          Routine blank1000
          Routine part3_visualize
          Routine part3_rate
          Routine part3_question
          LoopInitiator skip_loop loopType="TrialHandler"
            loopType = random
            nReps = myReps
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            Routine study_again
          LoopTerminator skip_loop
        LoopTerminator visualization_loop
        LoopInitiator loop_msg loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = last_scene
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          Routine msg_next_scene
        LoopTerminator loop_msg
      LoopTerminator part3_loop
    LoopTerminator skip_loop_debug
  LoopTerminator skip_to_part4_debug
  Routine part4_instructions
  Routine enc_instruction_screen
  Routine enc_inst_2
  Routine get_stim_list
  LoopInitiator trials_enc loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U1.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Somar'), ('item_stimulus', 'stimuli/items/sea_object_3.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_J2.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/jungle_object_6.png'), ('item_cat', 'Jungle'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_J2.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/jungle_animal_14.png'), ('item_cat', 'Jungle'), ('item_type', 'animal'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/sea_object_4.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U1.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Somar'), ('item_stimulus', 'stimuli/items/sea_object_8.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/sea_animal_5.png'), ('item_cat', 'Undersea'), ('item_type', 'animal'), ('congruency', 'sc')])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
    Routine scene_item_presentation
    Routine congruency_response
    Routine blank1000_2
  LoopTerminator trials_enc
  Routine ret_inst_gen
  Routine ret_inst_1
  Routine ret_inst_2
  Routine ret_inst_3
  Routine ret_inst_4
  Routine ret_inst_5
  Routine ret_inst_6
  LoopInitiator trials_retrieval loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U1.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Somar'), ('item_stimulus', 'stimuli/items/sea_object_3.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_J2.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/jungle_object_6.png'), ('item_cat', 'Jungle'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_J2.png'), ('scene_cat', 'Jungle'), ('scene_label', 'Negvi'), ('item_stimulus', 'stimuli/items/jungle_animal_14.png'), ('item_cat', 'Jungle'), ('item_type', 'animal'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/sea_object_4.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U1.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Somar'), ('item_stimulus', 'stimuli/items/sea_object_8.png'), ('item_cat', 'Undersea'), ('item_type', 'object'), ('congruency', 'sc')]),
      OrderedDict([('scene_stimulus', 'stimuli/scenes/scene_U2.png'), ('scene_cat', 'Undersea'), ('scene_label', 'Tulon'), ('item_stimulus', 'stimuli/items/sea_animal_5.png'), ('item_cat', 'Undersea'), ('item_type', 'animal'), ('congruency', 'sc')])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
    Routine item_imagine_scene
    Routine blank1000_2
    Routine select_context
    Routine blank500
    Routine context_confidence
    Routine blank1000_2
    Routine select_scene_name
    Routine blank500
    Routine select_confidence
    Routine blank3000
  LoopTerminator trials_retrieval
  Routine end_screen_2
